CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:((?P<slideID>.*)_(?P<y>.*)_(?P<x>.*).jpeg)$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:tile
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:slideID

UnmixColors:[module_num:5|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
    Stain count:3
    Select the input color image:tile
    Name the output image:Hematoxylin
    Stain:Hematoxylin
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    Name the output image:Eosin
    Stain:Eosin
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    Name the output image:pigment
    Stain:Custom
    Red absorbance:0.348408
    Green absorbance:0.652754
    Blue absorbance:0.672699

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Hematoxylin
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:pigment
    Name the primary objects to be identified:pigment
    Typical diameter of objects, in pixel units (Min,Max):15,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:pigment
    Name the output image:pigment_mask
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:9|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:inverted_pigment_mask
    Image or measurement?:Image
    Select the first image:pigment_mask
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MaskObjects:[module_num:10|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
    Select objects to be masked:nuclei
    Name the masked objects:nuclei_out_of_pigment
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:inverted_pigment_mask
    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:tile
    Name the output image:tile_nuclei_outline_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#1EE81E
    Select objects to display:nuclei
    Select outline color:red
    Select objects to display:pigment

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:tile
    Name the output image:tile_nuclei_out_of_pigment_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FCFF
    Select objects to display:nuclei_out_of_pigment
    Select outline color:#EA2741
    Select objects to display:pigment

SaveImages:[module_num:13|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:tile_nuclei_outline_overlay
    Select method for constructing file names:Single name
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    Enter single file name:overlay_\g<y>_\g<x>
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    Saved file format:png
    Output file location:Elsewhere...|/gpfs/data/tsirigoslab/home/sn2289/BRAF_project_revisions/cellprofiler/test_output/nuclei_\g<slideID>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:14|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:tile_nuclei_out_of_pigment_overlay
    Select method for constructing file names:Single name
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    Enter single file name:overlay_out_of_pigment_\g<y>_\g<x>
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    Saved file format:png
    Output file location:Elsewhere...|/gpfs/data/tsirigoslab/home/sn2289/BRAF_project_revisions/cellprofiler/test_output/nuclei_\g<slideID>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureObjectSizeShape:[module_num:15|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enabled:False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
    Select object sets to measure:nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:16|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enabled:False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
    Select object sets to measure:pigment
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:17|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enabled:False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
    Select object sets to measure:nuclei_out_of_pigment
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:18|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enabled:False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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/gpfs/data/tsirigoslab/home/sn2289/BRAF_project_revisions/cellprofiler/test_output/nuclei_\g<slideID>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Cells_\g<slideID>.txt
    Use the object name for the file name?:No
    Data to export:pigment
    Combine these object measurements with those of the previous object?:No
    File name:pigmented_regions_\g<slideID>.txt
    Use the object name for the file name?:No
    Data to export:nuclei_out_of_pigment
    Combine these object measurements with those of the previous object?:No
    File name:Cells_out_of_pigment_\g<slideID>.txt
    Use the object name for the file name?:No
